PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['images/target_I.jpg', 'images/target_plus.jpg', 'images/target_square.jpg', 'images/target_T.jpg', 'images/target_X.jpg']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  color = $[1, 1, 1]
  expName = choice_RTT_demo
  keyboardBackend = PsychToolbox
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Routines
  Routine présentation
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    TextComponent main_trial_instruct
      color = black
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Vous êtes sur le point de commencer le test !

        Appuyez sur une touche pour afficher les instructions.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent ready_button
      image = images/response_ready.jpg
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 1
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  Routine instructions_1
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    TextComponent instr
      color = black
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Dans cette expérience, vous devez cliquer sur la couleur que vous avez vue, le plus rapidement possible.

        Appuyez sur C pour le rouge
        Appuyez sur V pour le vert
        Appuyez sur B pour le bleu

        Appuyez sur une touche pour commencer.
    KeyboardComponent startInst
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    MouseComponent startMouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent response_red
      image = images/response_red.png
      pos = (-0.25, -0.25)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
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    ImageComponent response_green
      image = images/response_green.png
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
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    ImageComponent response_blue
      image = images/response_blue.png
      pos = (0.25, -0.25)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
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  Routine end_message
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    TextComponent end_text
      color = black
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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      text:
        L'expérience est terminée !

        Merci pour votre temps !
  Routine trial
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    CodeComponent setStimuli
      Code Type = Auto->JS
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      Begin Routine:
        positionList = [-0.375,-0.125,0.125,0.375] #list of possible X coordinates for target to appear
        shuffle(positionList) #randomise these positions
        targetX = positionList[0] #pick the first value from the list

        #thisImage is the variable in the Image field of targetImage
        if thisImage == 'images/red_dot.png': #path of where to find the target image
            corrAns = 'c' #setting the key press that will be the correct answer
            corrButton = red_button #setting the button that will be the correct answer
            corrButtonName = 'red_button' #making this a string so that it can be compared later when checking for acccuracy
        elif thisImage == 'images/green_dot.png':
            corrAns = 'v'
            corrButton = green_button
            corrButtonName = 'green_button'
        elif thisImage == 'images/blue_dot.png':
            corrAns = 'b'
            corrButton = blue_button
            corrButtonName = 'blue_button'
    ImageComponent rightright_tile
      image = images/grey_square.jpg
      pos = (0.375, 0)
      saveStartStop = False
      size = (0.22, 0.22)
      startVal [time (s)] = 0.5
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    ImageComponent right_tile
      image = images/grey_square.jpg
      pos = (0.125, 0)
      saveStartStop = False
      size = (0.22, 0.22)
      startVal [time (s)] = 0.5
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    ImageComponent left_tile
      image = images/grey_square.jpg
      pos = (-0.125, 0)
      saveStartStop = False
      size = (0.22, 0.22)
      startVal [time (s)] = 0.5
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    ImageComponent leftleft_tile
      image = images/grey_square.jpg
      pos = (-0.375, 0)
      saveStartStop = False
      size = (0.22, 0.22)
      startVal [time (s)] = 0.5
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    ImageComponent red_button
      image = images/response_red.png
      pos = (-0.25, -0.25)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
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    ImageComponent green_button
      image = images/response_green.png
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
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    ImageComponent blue_button
      image = images/response_blue.png
      pos = (0.25, -0.25)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
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    ImageComponent targetImage
      image [set every repeat] = $thisImage
      pos [set every repeat] = [targetX, 0]
      size = (0.2, 0.2)
      startVal [time (s)] = $onsetTime
      stopVal [duration (s)] = 0.2
      units = height
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    KeyboardComponent keyResp
      allowedKeys [set every repeat] = 'b','c','v'
      correctAns = $corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      storeCorrect = True
      syncScreenRefresh = False
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    MouseComponent mouseResp
      clickable = red_button, green_button, blue_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0
      timeRelativeTo = routine
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    CodeComponent recordRTandAccuracy
      Code Type = Auto->JS
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      End Routine:
        #this code is to record the reaction times and accuracy of the trial

        thisRoutineDuration = t # how long did this trial last

        # keyResp.rt is the time with which a key was pressed
        # mouseResp.time is the time with which a button was clicked/pressed
        # thisRecRT - how long it took for participants to respond after onset of targetImage
        # thisRespType - keeping track of which response component was used
        # thisAcc - whether or not the response was correct
        # correctMouseResp - name of column in data output which records the accuracy of mouse responses

        if keyResp.keys:
            thisRespType = 'keyboard' #record type of response
            thisRecRT = keyResp.rt - onsetTime #record time taken to response
            if keyResp.corr == 1: #if the response is correct
                thisAcc = 'correct' #print correct
            else:
                thisAcc = 'incorrect'
        else:
            thisRespType = 'mouse'
            thisRecRT = mouseResp.time[0] - onsetTime
            if mouseResp.clicked_name[0] == corrButtonName: #check if what was clicked corresponds to the correct button
                thisAcc = 'correct'
                thisExp.addData('correctMouseResp', 1) #record accuracy of mouse clicks
            else:
                thisAcc = 'incorrect'
                thisExp.addData('correctMouseResp', 0)

        thisExp.addData('trialRespTimes', thisRecRT) #record the actual response times of each trial


        #print(thisRoutineDuration, thisRecRT, thisRespType, thisAcc, onsetTime)
  Routine description_p1
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    TextComponent instr_2
      color = black
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Appuyer sur une touche pour démarrer la phase 1.
      units = height
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    KeyboardComponent startInst_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    MouseComponent startMouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine description_p2
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    TextComponent instr_3
      color = black
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Bravo, la phase 1 est terminée !

        Appuyer sur une touche pour démarrer la phase 2.
    KeyboardComponent startInst_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    MouseComponent startMouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine description_p3
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    TextComponent instr_4
      color = black
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Bravo, la phase 2 est terminée !

        Appuyer sur une touche pour démarrer la phase 3.
    KeyboardComponent startInst_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    MouseComponent startMouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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Flow
  Routine présentation
  Routine instructions_1
  Routine description_p1
  LoopInitiator ExptLoop1 loopType="TrialHandler"
    conditionsFile = RTtimeConditions_main.xlsx
    loopType = random
    nReps = 50
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    conditions:
      [{'onsetTime': 1, 'thisImage': 'images/green_dot.png'},
      {'onsetTime': 1, 'thisImage': 'images/blue_dot.png'},
      {'onsetTime': 1, 'thisImage': 'images/red_dot.png'},
      {'onsetTime': 1, 'thisImage': 'images/green_dot.png'},
      {'onsetTime': 1, 'thisImage': 'images/blue_dot.png'},
      {'onsetTime': 1, 'thisImage': 'images/red_dot.png'}]
    Routine trial
  LoopTerminator ExptLoop1
  Routine description_p2
  LoopInitiator ExptLoop2 loopType="TrialHandler"
    conditionsFile = RTtimeConditions_main.xlsx
    loopType = random
    nReps = 50
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    conditions:
      [{'onsetTime': 1, 'thisImage': 'images/green_dot.png'},
      {'onsetTime': 1, 'thisImage': 'images/blue_dot.png'},
      {'onsetTime': 1, 'thisImage': 'images/red_dot.png'},
      {'onsetTime': 1, 'thisImage': 'images/green_dot.png'},
      {'onsetTime': 1, 'thisImage': 'images/blue_dot.png'},
      {'onsetTime': 1, 'thisImage': 'images/red_dot.png'}]
    Routine trial
  LoopTerminator ExptLoop2
  Routine description_p3
  LoopInitiator ExptLoop3 loopType="TrialHandler"
    conditionsFile = RTtimeConditions_main.xlsx
    loopType = random
    nReps = 50
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    conditions:
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    Routine trial
  LoopTerminator ExptLoop3
  Routine end_message
